begintemplate granulecell 

//public init, tolpol, subset, geom, biophys, geom_nseg 
public init, all, soma_list, dendrite_list, soma, dend, axon

create soma[4], dend[32], axon

proc init() {
  topol()
  subsets()
  geom()  
  biophys() 
  geom_nseg()
}


proc topol() { local i

  connect axon(0), soma(1)  
  connect soma[1](0), soma(0)
  for i = 2, 3 connect soma[i](0), soma[1](1)
  connect dend(0), soma(1)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), dend[7](1)
  connect dend[16](0), dend(1)
  for i = 17, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  connect dend[22](0), dend[16](1)
  connect dend[23](0), soma[2](1)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[23](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)

  basic_shape()
}

proc shape3d_1() {

  axon {pt3dclear()
    pt3dadd(-0.568,-1,-0.023,1.5)
    pt3dadd(3.5,7,7,1)
    pt3dadd(5.5,14,7,1)
    pt3dadd(6.5,22.5,6,1)
    pt3dadd(6,29.5,7,1)
    pt3dadd(1.5,36,12,1)
    pt3dadd(-2.5,41,14,1)
    pt3dadd(-7.5,45,15.5,1)
    pt3dadd(-9,45,19.5,1)
    pt3dadd(-13.5,45.5,22.5,1)
    pt3dadd(-16.5,47,25.5,1)
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  }
}

proc shape3d_2() {
  dend[6] {	pt3dadd(205.112, -9.65, -37.125, 0.5)
	pt3dadd(207.237, -9.637, -37.125, 0.5)
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  }
}

proc shape3d_3() {
  dend[9] {	pt3dadd(220.125, 39.012, -43.625, 0.5)
  }
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  }
}

proc shape3d_4() {
  dend[20] {	pt3dadd(215.625, -56.5, 3.25, 0.5)
	pt3dadd(225, -59.587, 3.25, 0.5)
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  }
}

proc shape3d_5() {
  dend[27] {	pt3dadd(82.925, 90.262, -18.612, 0.5)
	pt3dadd(83.962, 90.887, -18.625, 0.5)
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  }
}

proc shape3d_6() {
  dend[28] {	pt3dadd(233.362, 208.5, -46.25, 0.5)
	pt3dadd(233.812, 208.625, -46.5, 0.5)
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  }
}

proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
}

objref all, soma_list, dendrite_list
proc subsets() { local i
  objref all, soma_list, dendrite_list

  all = new SectionList()
    for i=0, 3 soma[i] all.append()
    for i=0, 31 dend[i] all.append()

  soma_list = new SectionList()
    for i=0, 3 soma[i] soma_list.append()

  dendrite_list = new SectionList()
    for i=0, 31 dend[i] dendrite_list.append()
}

proc geom() {
}



func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
        // above was too inaccurate with large variation in 3d diameter
        // so now we use all 3-d points to get a better approximate lambda
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}

proc geom_nseg() {
    soma area(0.5) // make sure diam reflects 3d points
        //freq = 100 // Hz, frequency at which AC length constant will be computed //d_lambda = 0.1 //forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1}        
    forall { nseg = int((L/(0.1*lambda_f(100))+0.9)/2)*2 + 1  }
}

proc biophys() {

    access soma

    Vrest = -74
    celsius = 22.0
    gna = 0.2
    gk = 0.06
    RaAll = 200
    RaAx = 50
    Rm = 6000
    Cm = 2.5

    forsec soma_list {
        
        insert ichan2  
	        gnatbar_ichan2 = gna
            gkfbar_ichan2 = gk
            gl_ichan2 = 0.0

        insert pas
            e_pas = Vrest
            g_pas = 1/Rm
        Ra = RaAll
        cm = Cm
    }

    forsec dendrite_list {
        insert ichan2
            gnatbar_ichan2 = gna/3
            gkfbar_ichan2 = gk
            gl_ichan2 = 0.0

        insert pas
            e_pas = Vrest
            g_pas = 1/Rm
        Ra = RaAll
        cm = Cm
    }

    axon {
        insert ichan2  
	        gnatbar_ichan2 = gna
            gkfbar_ichan2 = gk
            gl_ichan2 = 0.0

        insert pas
            e_pas = Vrest
            g_pas = 1/Rm
        Ra = RaAx
        cm = Cm
    }

    forall {enat = 55 ekf = -90  eks = -90 v = Vrest}

    forall {e_pas = Vrest + (inat_ichan2+ikf_ichan2)/g_pas}
}


endtemplate granulecell 
